PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['dataNO.xlsx', 'schedafinale.xlsx', 'datanoMINUSCOLO.xlsx', 'datanoMAIUSCOLO.xlsx', 'formdueW.csv', 'formuno.xlsx']
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.1
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = CLTandFLE
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine A_benvenuto
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    CodeComponent ben_code
      Code Type = Auto->JS
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      Begin Routine:
        ben_linea=0
      Each Frame:
        if ben_linea>=0.4:
            ben_linea=0.4
        else:
            ben_linea=t/8
    TextComponent ben_testo_1
      color = black
      letterHeight = 0.07
      opacity [set every frame] = 0+t/2
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text = Benvenuto all'esperimento!
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    TextComponent ben_testo_2
      color [set every frame] = sin(t), -1.0000, -1.0000
      letterHeight = 0.04
      opacity [set every frame] = 0+t/2
      pos = (0, -0.1)
      startVal [time (s)] = 0
      text = Clicca per iniziare
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    PolygonComponent ben_qdr_2
      fillColor = None
      lineColor = black
      opacity [set every frame] = 0+t/2
      ori = 45
      shape = rectangle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent ben_qdr_1
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      opacity [set every frame] = 0+t/2
      ori = 45
      shape = rectangle
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    PolygonComponent ben_qdrtno_1
      fillColor = -1.0000, -1.0000, -1.0000
      opacity [set every frame] = 0+t/2
      ori = 45
      pos = (-0.03, 0)
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    PolygonComponent ben_qdrtno_2
      fillColor = -1.0000, -1.0000, -1.0000
      opacity [set every frame] = 0+t/2
      ori = 45
      pos = (0.03, 0)
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    PolygonComponent ben_qdrtno_3
      fillColor = -1.0000, -1.0000, -1.0000
      opacity [set every frame] = 0+t/2
      ori = 45
      pos = (0.05, 0)
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent ben_qdrtno_4
      fillColor = -1.0000, -1.0000, -1.0000
      opacity [set every frame] = 0+t/2
      ori = 45
      pos = (-0.05, 0)
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    MouseComponent ben_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 2.0
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    PolygonComponent ben_linea_sx
      fillColor = -1.0000, -1.0000, -1.0000
      pos = (-0.35, 0)
      shape = rectangle
      size [set every frame] = (ben_linea, 0.005)
      startVal [time (s)] = 0.0
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    PolygonComponent ben_linea_dx
      fillColor = -1.0000, -1.0000, -1.0000
      pos = (0.35, 0)
      shape = rectangle
      size [set every frame] = (ben_linea, 0.005)
      startVal [time (s)] = 0.0
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  Routine B_consensoinformato
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    CodeComponent cons_code
      Code Type = Auto->JS
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      Begin Routine:
        consenso=2
        cons_go=1
        cons_hid=0
        cons_msg=None
        cons_opaav=1
        cons_opain=0.5
        cons_text.setAlignHoriz('left')
        go_on=0
        tempo_consenso=t
      Each Frame:
        if cons_hid>0:
            cons_hid=cons_hid-0.05
        if cons_hid<=0:
            if cons_mouse.isPressedIn(cons_avanti):
                cons_go=cons_go+1
                cons_hid=1
            elif cons_mouse.isPressedIn(cons_indietro):
                cons_go=cons_go-1
                cons_hid=1

        if cons_go>3:
            cons_go=3


        if cons_go < 1:
            cons_go = 1

        if cons_go == 2:
            cons_msg = (
                "    Dichiari:"
                + "\n\n- Di essere maggiorenne."
                + "\n\n- Di essere a conoscenza che lo studio è conforme alle leggi vigenti (Decreto Legislativo 196/2003 e GDPR UE 679/2016) riguardo la protezione dei dati, e che acconsenti al trattamento e alla comunicazione dei dati personali,"
                + " nei limiti, per le finalità e per la durata specificate dalla normativa vigente (Decreto Legislativo 196/2003 e GDPR UE 679/2016). Il responsabile della ricerca si impegna a rispettare gli obblighi previsti dalla legislazione"
                + " riguardo la raccolta, il trattamento e la conservazione dei dati sensibili."
            )
            cons_opaav = 1
            cons_opain = 1

        elif cons_go == 3:
            cons_msg = (
                "- Di essere a conoscenza che puoi ritirarti dallo studio in qualsiasi momento senza dover fornire spiegazioni, senza alcuna penalità, e garantendo che i tuoi dati non vengano utilizzati."
                + "\n\n- Di essere a conoscenza che i dati saranno raccolti in modo anonimo e associati a un codice che permetterà solo al partecipante di accedere ai propri dati."
                + "\n\n- Di essere a conoscenza che i tuoi dati saranno utilizzati esclusivamente per scopi scientifici e statistici, nel rispetto delle regole di riservatezza."
                + "\n\n  Premi 'Accetta' per acconsentire e proseguire. Premi 'Rifiuta' altrimenti."
            )
            cons_opaav = 0.5
            cons_opain = 1

        elif cons_go == 1:
            cons_msg = (
                "    Gentile partecipante, chiediamo il tuo consenso per prendere parte a questa ricerca.\n\n"
                + "Lo scopo di questa ricerca è capire l'effetto che l'utilizzo della lingua inglese ha sulle nostre decisioni."
                + "\n\nLa durata totale dell'esperimento sarà di circa 20 minuti."
                + "\n\nTi verranno presentati dei paragrafi e delle frasi da leggere a cui dovrai rispondere."
            )
            cons_opaav = 1
            cons_opain = 0.5

        if cons_avvio.status == STARTED:
            if cons_mouse.isPressedIn(cons_avvio):
                consenso = 1
                continueRoutine = False

            elif cons_mouse.isPressedIn(cons_noavvio):
                consenso = 0
                continueRoutine = False

        tempo_consenso = t
      End Routine:
        if go_on > 40:
            loop1=1
        if go_on<=40:
            loop1=0


        thisExp.addData('tempo_consenso', tempo_consenso)
    TextComponent cons_tit
      color = black
      letterHeight = 0.05
      pos = (0, 0.39)
      startVal [time (s)] = 0.0
      text = Consenso informato
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    PolygonComponent cons_indietro
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      opacity [set every frame] = cons_opain
      pos = (-0.3, 0.25)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent cons_avanti
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      opacity [set every frame] = cons_opaav
      pos = (0.3, 0.25)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent cons_avvio
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      pos = (0.2, -0.4)
      shape = rectangle
      size = (0.2, 0.1)
      startEstim = 2.0
      startVal [condition] = cons_go==3
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    PolygonComponent cons_noavvio
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      pos = (-0.2, -0.4)
      shape = rectangle
      size = (-0.2, 0.1)
      startEstim = 2.0
      startVal [condition] = cons_go==3
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    PolygonComponent butt_dalton
      disabled = True
      fillColor = 0.3333, 0.3333, 0.3490
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.1, 0.05)
      startEstim = 1.0
      startVal [condition] = cons_go==2
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    TextComponent cons_avviotext
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.03
      pos = (0.2, -0.4)
      startEstim = 2
      startVal [condition] = cons_go==3
      text = Accetta
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    TextComponent cons_avviotext_3
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.2, -0.4)
      startEstim = 2
      startVal [condition] = cons_go==3
      text = Rifiuta
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    TextComponent avvio_dalton
      color = 1.0000, 1.0000, 1.0000
      disabled = True
      letterHeight = 0.015
      pos = (-0.5, -0.4)
      startEstim = 2
      startVal [condition] = cons_go==2
      text [set every frame] = $Disp
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    TextComponent cons_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $cons_msg
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    TextComponent cons_nr_pag
      color = black
      letterHeight = 0.03
      pos = (-0.02, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $cons_go
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    TextComponent cons_nr_pag_2
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = /
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    TextComponent cons_nr_pag_3
      color = black
      letterHeight = 0.03
      pos = (0.02, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = 3
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    TextComponent cons_av_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      opacity [set every frame] = cons_opaav
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.0
      text = Avanti
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    TextComponent cons_in_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      opacity [set every frame] = cons_opain
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = Indietro
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    MouseComponent cons_mouse
      clickable = cons_avanti, cons_indietro, cons_avvio, butt_dalton
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Alfa
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    CodeComponent alfa_code
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['group'])==1:
            var_colore=[-1,-1,-1]
            var_testo = "Arial"
            conditionFile="dataNO.xlsx"
        else:
                var_testo = "Arial"
                var_colore=[-1,-1,-1]
                conditionFile="datanoMINUSCOLO.xlsx"
    PolygonComponent alfa_linea
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.005, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent alfa_testo2
      color = black
      letterHeight = 0.035
      pos = (0.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Cerca di operare in un ambiente che sia:
        (1) al chiuso
        (2) sufficientemente illuminato
        (3) senza fonti di luce dirette sullo schermo
    TextComponent alfa_testo1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Assicurati che lo schermo su cui hai avviato
        l'esperimento sia in modalità schermo intero.
         Mantieni questa modalità per tutta
         la durata dell'esperimento.
    ImageComponent alfa_image2
      image = resources/ufficio.PNG
      pos = (0.4, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent alfa_image1
      image = resources/schermo.PNG
      pos = (-0.4, -0.2)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    PolygonComponent alfa_mask
      fillColor = white
      shape = rectangle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent alfa_clicca
      color [set every frame] = sin(t), -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0
      text = Clicca QUI per cominciare
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    MouseComponent alfa_mouse
      clickable = alfa_mask
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_alfa2
      Code Type = JS
      Before JS Experiment:
        document.addEventListener('contextmenu',event => event.preventDefault());
  Routine ITI
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    PolygonComponent ITI_fig
      fillColor = white
      shape = triangle
      size = (0, 0)
      startVal [time (s)] = 0
      stopVal [frame N] = 60
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  Routine B2_istruzioni
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    CodeComponent cons_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['group'])==1:
            titoloistruzioni="Istruzioni"
            tastoavanti = "Avanti"
            tastoindietro ="Indietro"
            tastocontinua = "Continua"
        else:
            titoloistruzioni="Instructions"
            tastoavanti = "Forward"
            tastoindietro ="Backward"
            tastocontinua = "Continue"
      Begin Routine:
        cons_go=1
        cons_hid=0
        cons_msg=None
        cons_opaav=1
        cons_opain=0.5
        cons_text_2.setAlignHoriz('left')
        go_on=0

        tempo_istru=t
      Each Frame:
        tempo_istru = t

        if cons_hid > 0:
            cons_hid = cons_hid - 0.05
        if cons_hid <= 0:
            if cons_mouse.isPressedIn(cons_avanti):
                cons_go = cons_go + 1
                cons_hid = 1
            elif cons_mouse.isPressedIn(cons_indietro):
                cons_go = cons_go - 1
                cons_hid = 1

        if cons_go > 3:
            cons_go = 3

        if cons_go < 1:
            cons_go = 1

        if cons_go == 2:
            if int(expInfo['group'])==1:
                cons_msg = (
                "    Successivamente, verrà presentata una serie di casi clinici di pazienti affetti dalla sindrome di Lindsay."
                + " Per ogni caso, vedrai prima se al paziente è stato somministrato il Batatrim o no, e ti sarà chiesto di indicare se pensi che il paziente supererà la crisi."
                + " Infine, vedrai se il paziente ha realmente superato la crisi. \n\nCerca di scoprire se il Batatrim è davvero efficace. Dopo aver osservato un certo"
                + " numero di pazienti, ti saranno presentate alcune domande."
            )
            else:
                 cons_msg = (
                "    Next, a series of clinical cases of patients affected by Lindsay syndrome will be presented."
                + " In each case, you will first see if the patient was administered Batatrim or not, and you will be asked to indicate if you think the patient will overcome the crisis."
                + " Finally, you will see if the patient actually overcame the crisis. \n\nTry to discover if Batatrim is really effective. After observing a certain"
                + " number of patients, you will be presented with some questions."
            )
            cons_opaav = 1
            cons_opain = 1

        elif cons_go == 3:
            if int(expInfo['group'])==1:
                    cons_msg = (
                "    Se hai capito le istruzioni e sei pronto per iniziare, premi il pulsante 'Continua' qui sotto."
                + "\n\n    Altrimenti, premi 'Indietro' per leggere di nuovo."
            )
            else:
                cons_msg = (
                "    If you understand the instructions and are ready to start, press the 'Continue' button below."
                + "\n\n    Otherwise, press 'Backward' to read again."
            )

            cons_opaav = 0.5
            cons_opain = 1

        elif cons_go == 1:
            if int(expInfo['group'])==1:
                cons_msg =  (
                "    Immagina di essere un medico che lavora nel pronto soccorso di un ospedale."
                + " Sei uno specialista in una malattia molto rara e pericolosa chiamata 'Sindrome di Lindsay', che deve essere trattata molto rapidamente."
                + "\n\n    Le crisi indotte da questa malattia potrebbero essere fermate immediatamente con un medicinale chiamato 'Batatrim'. Tuttavia, questo medicinale è ancora in fase sperimentale,"
                + " quindi la sua efficacia non è stata ancora completamente dimostrata."
                + " Inoltre, questo farmaco può causare alcuni effetti collaterali, che possono avere conseguenze gravi, quindi non è sempre possibile utilizzarlo."
            )
            else:
                cons_msg = (
                "    Imagine you are a doctor working in the emergency room of a hospital."
                + " You are a specialist in a very rare and dangerous disease called 'Lindsay syndrome', which must be treated very quickly."
                + "\n\n    The crises induced by this disease could be stopped immediately with a medication called 'Batatrim'. However, this medication is still in an experimental phase,"
                + " so its effectiveness has not yet been fully demonstrated."
                + "  Furthermore, this drug can cause some side effects, which can have serious consequences, so it is not always possible to use it."
            )
            cons_opaav = 1
            cons_opain = 0.5

        if cons_avvio_2.status == STARTED:
            if cons_mouse.isPressedIn(cons_avvio_2):
                continueRoutine = False
      End Routine:
        thisExp.addData('tempo_istru', tempo_istru)
    TextComponent cons_tit_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.05
      pos = (0, 0.39)
      startVal [time (s)] = 0.0
      text = $titoloistruzioni
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    PolygonComponent cons_indietro_2
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      opacity [set every frame] = cons_opain
      pos = (-0.3, 0.25)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent cons_avanti_2
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      opacity [set every frame] = cons_opaav
      pos = (0.3, 0.25)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent cons_avvio_2
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 2
      pos = (0, -0.4)
      shape = rectangle
      size = (0.2, 0.1)
      startEstim = 2.0
      startVal [condition] = cons_go==3
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    TextComponent cons_avviotext_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, -0.4)
      startEstim = 2
      startVal [condition] = cons_go==3
      text = $tastocontinua
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    TextComponent cons_text_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $cons_msg
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    TextComponent cons_nr_pag_4
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (-0.02, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $cons_go
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    TextComponent cons_nr_pag_5
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = /
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    TextComponent cons_nr_pag_6
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0.02, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = 3
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    TextComponent cons_av_text_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = cons_opaav
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $tastoavanti
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    TextComponent cons_in_text_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = cons_opain
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $tastoindietro
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    MouseComponent cons_mouse_2
      clickable = cons_avanti, cons_indietro
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine C_associative_task
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    CodeComponent code_ass
      Code Type = Auto->JS
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      Begin Experiment:
        tempo_tasktot=0

        if int(expInfo['group'])==1:
            tastosi="Sì"
            tastono = "No"
            ate ="Pensi che il paziente supererà la crisi?"

        else:
            tastosi="Yes"
            tastono = "No"
            ate ="Do you think the patient will overcome the crisis?"
      Begin Routine:
        ass= 0
        assMo2=1
        assMo=0


        tempo_trial=t
        hapremutosi=0
        hapremutono=0
        contatore=0
      Each Frame:
        if t>=1:
            assMo=assMo-0.02

        if t<1.5:
            if mouse.isPressedIn(ass_psi):
                ass=0
            if mouse.isPressedIn(ass_pno):
                ass=0

        if t>=1.5:
            if mouse.isPressedIn(ass_psi):
                ass=1

            if mouse.isPressedIn(ass_pno):
                ass=1

        if contatore<=0 and t>=1.5:
            if mouse.isPressedIn(ass_psi):
                hapremutosi=1
                contatore=contatore+2

            if mouse.isPressedIn(ass_pno):
                hapremutono=1
                contatore=contatore+2



        if ass_r1_3.status==FINISHED:
            assMo2=assMo2-0.05

        if assMo2<=0:
            continueRoutine=False

        tempo_trial=t
      End Routine:
        thisExp.addData('tempo_trial', tempo_trial)
        thisExp.addData('hapremutosi', hapremutosi)
        thisExp.addData('hapremutono', hapremutono)

        tempo_tasktot=tempo_tasktot+tempo_trial
        thisExp.addData('tempo_tasktot', tempo_tasktot)
    PolygonComponent linea
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 5
      pos = (0, 0.26)
      shape = line
      size = (1.1, 0.52)
      startVal [time (s)] = 0.0
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    PolygonComponent cerchio_2
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.55, 0.26)
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent cerchio
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.55, 0.26)
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent ass_r1_3
      fillColor = white
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos = (0, -0.45)
      shape = triangle
      size = (0.01, 0.01)
      startEstim = 2.0
      startVal [condition] = ass==1
      stopVal [duration (s)] = 2.0
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    PolygonComponent ass_r1_4
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos = (0, -0.175)
      shape = rectangle
      size = (1, 0.15)
      startEstim = 2.0
      startVal [condition] = ass>0
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    PolygonComponent ass_r1_2
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      shape = rectangle
      size = (1, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent ass_r1
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos = (0, 0.175)
      shape = rectangle
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent ass_psi
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos = (-0.2, -0.04)
      shape = rectangle
      size = (0.15, 0.06)
      startVal [time (s)] = 0
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    PolygonComponent ass_pno
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos = (0.2, -0.04)
      shape = rectangle
      size = (0.15, 0.06)
      startVal [time (s)] = 0
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    TextComponent ass_primo
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = assMo2
      pos = (0, 0.175)
      startVal [time (s)] = 0.0
      text [set every repeat] = $causa
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    TextComponent ass_secondo
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = assMo2
      pos = (0, 0.04)
      startVal [time (s)] = 0.0
      text = $ate
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    TextComponent ass_si
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = assMo2
      pos = (-0.2, -0.04)
      startVal [time (s)] = 0
      text = $tastosi
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    TextComponent ass_no
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = assMo2
      pos = (0.2, -0.04)
      startVal [time (s)] = 0
      text = $tastono
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    TextComponent ass_terzo
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      opacity [set every frame] = assMo2
      pos = (0, -0.175)
      startVal [condition] = ass==1
      text [set every repeat] = $effetto
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    PolygonComponent maskuno
      fillColor [set every frame] = 1.0000, 1.0000, 1.0000
      lineColor [set every frame] = 1.0000, 1.0000, 1.0000
      lineWidth = 0
      pos [set every frame] = (0, assMo)
      shape = rectangle
      size = (1.06, 0.51)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    MouseComponent mouse
      clickable = ass_psi, ass_pno
      durationEstim = 3.0
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 1.5
      stopVal [condition] = ass==1
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  Routine E_check
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    CodeComponent code_vd_2
      Code Type = Auto->JS
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      Begin Routine:
        punt_in=0
        tempo_check
      Each Frame:
        if (isNaN(check.rating)):
            msg2="Select a value from 1 to 7"
        else:
            punt_in= int(check.rating)
            msg2="You selected: "+punt_in

        if rettoki.status==STARTED:
            if mouse_ch.isPressedIn(rettoki):
                continueRoutine=False
        tempo_check=t
      End Routine:
        thisExp.addData('tempo_check', tempo_check)
    TextComponent ch_istr2
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Fai clic sulla barra sopra, e apparirà uno slider. Puoi trascinare questo slider su qualsiasi punto della scala. Una volta soddisfatto della tua risposta, fai clic sul pulsante Conferma.
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    PolygonComponent cer
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.4, 0)
      shape = circle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent cer_2
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.4, 0)
      shape = circle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent ret
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = rectangle
      size = (0.8, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent check
      borderColor = 0.6549, 0.6549, 0.6549
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.03
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2,3,4,5,6,7)
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    TextComponent feedback_2
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text [set every frame] = $msg2
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    MouseComponent mouse_ch
      clickable = check, rettoki
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent rettoki
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      pos = (0, -0.2)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = check.rating
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    TextComponent ok_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [condition] = check.rating
      text = Conferma
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    TextComponent check_titolo
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Domanda
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    TextComponent ch_istr
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Quanto hai trovato difficile l'attività di lettura e di comprensione durante questo esperimento?
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    TextComponent ch_istr_2
      color = black
      letterHeight = 0.025
      pos = (0, 0.14)
      startVal [time (s)] = 0.0
      text = (La scala va da 1 a 7: con 1 che indica Molto Facile e 7 che indica Molto Difficile)
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  Routine domandacheck
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    PolygonComponent risp_p1
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, 0.1)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent risp_p1_2
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.05)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent risp_p1_3
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.2)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent risp_p1_4
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.35)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent domanda_1
      color [set every frame] = $col
      letterHeight = 0.042
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Domanda - seleziona la risposta corretta
    TextComponent domanda
      color [set every frame] = $col
      letterHeight = 0.033
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      text = L'ultimo paziente che hai osservato:
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    TextComponent risp_1
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Ha preso il Batatrim ed ha superato la crisi
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    TextComponent risp_2
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Ha preso il Batatrim e non ha superato la crisi
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    TextComponent risp_3
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Non ha preso il Batatrim ed ha superato la crisi
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    TextComponent risp_4
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Non ha preso il Batatrim e non ha superato la crisi
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    MouseComponent mouse_r
      clickable = risp_p1_2, risp_p1_3, risp_p1_4, risp_p1
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        col=var_colore
  Routine D_VD
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    CodeComponent code_vd
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['group'])==1:
            taconferma = "Conferma"
            tadomanda = "Quanto pensi che il Batatrim sia stato efficace nel trattare la crisi dei pazienti che hai visto?"
            tasp = "(la scala va da 0 a 100: con 0 che significa decisamente no, e 100 che significa decisamente sì)"
            tasp2 = "clicca sulla barra sopra, e vedrai apparire uno slider. Puoi trascinare questo slider su qualsiasi punto della scala. Una volta soddisfatto della tua risposta, clicca il pulsante Conferma."
            taconf = "Conferma"
            tadom = "Domanda"
        else:
            taconferma = "Confirm"
            tadomanda = "To what extent do you think Batatrim was effective in treating the crisis of the patients you have seen?"
            tasp = "(the scale ranges from 0 to 100: with 0 being definitely no, and 100 being definitely yes)"
            tasp2 = "Click on the bar above, and you will see a slider appear. You can drag this slider to any point on the scale. Once you are satisfied with your answer, click the Confirm button."
            taconf = "Confirm"
            tadom = "Question"
      Begin Routine:
        punt_int=0
        tempo_vd=t
      Each Frame:
        if (isNaN(vd.rating)):
            if int(expInfo['group'])==1:
                msg="Seleziona un valore tra 0 e 100"
            else: msg="Select a value from 0 to 100"
        else:
            punt_int= int(vd.rating)
            msg="Hai selezionato: "+punt_int

        if rettok.status==STARTED:
            if mouse_vd.isPressedIn(rettok):
                continueRoutine=False



        tempo_vd=t
      End Routine:
        thisExp.addData('tempo_vd', tempo_vd)
    PolygonComponent cerch1
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.4, 0)
      shape = circle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent rett
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      shape = rectangle
      size = (0.8, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent cerch1_2
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.4, 0)
      shape = circle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent vd
      borderColor = 0.6549, 0.6549, 0.6549
      color = $var_colore
      fillColor = -1.0000, -1.0000, -1.0000
      font = Brush Script MT
      forceEndRoutine = False
      granularity = 1
      labels = (0,100)
      letterHeight = 0.03
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89,90,91,92,93,94,95,96,97,98,99,100)
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    TextComponent feedback
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0
      text [set every frame] = $msg
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    PolygonComponent rettok
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      pos = (0, -0.2)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = vd.rating
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    TextComponent ok
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [condition] = vd.rating
      text = $taconferma
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    TextComponent istr_vd
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = $tadomanda
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    TextComponent istr_vd_3
      color = $var_colore
      font = $var_testo
      letterHeight = 0.025
      pos = (0, 0.14)
      startVal [time (s)] = 0.0
      text = $tasp
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    TextComponent istr_vd_2
      color = $var_colore
      font = $var_testo
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = $tasp2
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    TextComponent vd_titolo
      color = $var_colore
      font = $var_testo
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = $tadom
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    MouseComponent mouse_vd
      clickable = vd, rettok
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine domandaistr
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    TextComponent doistr_2
      color [set every frame] = $col
      letterHeight = 0.033
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      text = Nelle istruzioni hai appreso che:
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    TextComponent doistr
      color [set every frame] = $col
      letterHeight = 0.042
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Domanda - seleziona la risposta corretta
    PolygonComponent rett_a
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, 0.1)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rett_b
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.05)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rett_c
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.2)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rett_d
      fillColor = white
      lineColor [set every frame] = $col
      lineWidth = 4
      pos = (0, -0.35)
      shape = rectangle
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent risp_a
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = La vicenda si svolge all'interno di una clinica
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    TextComponent risp_b
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Il farmaco va usato sui pazienti con il Batatrim
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    TextComponent risp_c
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Bisogna valutare l'efficacia del farmaco
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    TextComponent risp_d
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = La vicenda si svolge in un centro di ricerca
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    MouseComponent mouse_is
      clickable = rett_a, rett_b, rett_c, rett_d
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        col=var_colore
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        var_s=1
      Each Frame:
        if var_s>0:
            var_s=var_s-0.02
        elif var_s >= 0:
            var_s=0
    PolygonComponent pann_2
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos [set every frame] = (0, 0+var_s)
      shape = rectangle
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent pann_1
      fillColor = white
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 4
      opacity [set every frame] = assMo2
      pos [set every frame] = (0, 0.3+var_s)
      shape = rectangle
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = 0.6549, 0.6549, 0.6549
      pos = (-0.45, 0.45)
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = 0.6549, 0.6549, 0.6549
      pos = (0.45, 0.45)
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent line
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.6549, 0.6549, 0.6549
      lineWidth = 5
      pos = (0, 0.45)
      shape = line
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent rett_up
      fillColor [set every frame] = -0.2549, 0.2392, 0.2549
      lineColor [set every frame] = -0.2549, 0.2392, 0.2549
      pos = (0, 0.55)
      shape = rectangle
      size = (0.9, 0.2)
      startVal [time (s)] = 0.0
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  Routine B_dalton
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        hir=0
        gal=1
        col=var_colore
      Each Frame:
        if hir>0:
            hir=hir-0.05
        if hir<=0:
            if mouse_2.isPressedIn(b_dalt):
                gal=gal+1
                hir=1
            if mouse_2.isPressedIn(b_dalt_2):
                continueRoutine=False

        if gal>3:
            gal=3



        if var_colore=="blue":
            if gal>=2:
                col="black"

        else:
            if gal>=2:
                col="lightblue"
      End Routine:
        if var_colore=="blue":
            if col=="black":
                var_colore="black"

        else:
            if col=="lightblue":
               var_colore="lightblue"
    TextComponent testodiprova
      color [set every frame] = $col
      letterHeight = 0.03
      pos = (0, 0.34)
      startVal [time (s)] = 0.0
      text = Testo di prova
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    TextComponent testodiprova_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Sei in grado, anche se con difficoltà, di leggere la scritta sopra?

        Se clicchi 'Sì' procederai con l'esperimento.
        Se clicchi 'No' apparirà una seconda alternativa.

        Se la seconda alternativa è visibile clicca 'Sì' e procederai con l'esperimento.
        Se anche la seconda alternativa non è visibile, contatta il responsabile della ricerca e chiudi l'esperimento con 'ESC'.
    PolygonComponent b_dalt
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      opacity [set every frame] = cons_opaav
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent b_dalt_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      opacity [set every frame] = cons_opaav
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent testodiprova_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = Sì
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    TextComponent testodiprova_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = No
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    MouseComponent mouse_2
      clickable = b_dalt, b_dalt_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Info_demo
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    CodeComponent demo_code
      Code Type = Auto->JS
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      Each Frame:
        if demo_bott.status==STARTED:
            if mouse_demo.isPressedIn(demo_bott):
                continueRoutine = False
      End Routine:
        if demo_bott.status==STARTED:
            if mouse_demo.isPressedIn(demo_bott):
                continueRoutine = False
    TextComponent sesso_eta_titolo
      color = black
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Final sheet
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    FormComponent sessoeta
      Data Format = rows
      Font = Arial
      Item Padding = 0.05
      Items = schedafinale.xlsx
      Randomize = False
      Style = light
      Text Height = 0.03
      borderColor = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      itemColor = -1.0000, -1.0000, -1.0000
      markerColor = red
      responseColor = 1.0000, -1.0000, -1.0000
      size = (1.5, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent demo_bott
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.25)
      shape = rectangle
      size = (0.2, 0.1)
      startEstim = 2.0
      startVal [condition] = sessoeta.formComplete()
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    TextComponent scritt_demo
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.25)
      startEstim = 2
      startVal [condition] = sessoeta.formComplete()
      text = Confirm
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    TextComponent scritt_demo_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      startEstim = 2
      startVal [condition] = sessoeta.formComplete()
      text = Once the form is confirmed, wait a few seconds to be redirected to the final page.
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    MouseComponent mouse_demo
      clickable = sessoeta, demo_bott
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = JS
      End JS Routine:
        psychoJS.experiment.addData('globalClockTime', globalClock.getTime());
        psychoJS.experiment.nextEntry();
  Routine Survey
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  PavloviaSurveyRoutine survey
    surveyType = id
Flow
  Routine Alfa
  Routine Survey
  Routine ITI
  Routine B_consensoinformato
  LoopInitiator exp_loop loopType="TrialHandler"
    loopType = sequential
    nReps = consenso
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    Routine ITI
    Routine A_benvenuto
    Routine ITI
    Routine B2_istruzioni
    Routine ITI
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine C_associative_task
    LoopTerminator trials
    Routine ITI
    Routine D_VD
    Routine ITI
    Routine E_check
    Routine ITI
    Routine Info_demo
  LoopTerminator exp_loop
